PsychoPy2experiment version="3.1.2"
Settings
  Completed URL = https://github.com/Xinzhu-Fang/popout_exp0/blob/master/popout_cindy_lastrun.py
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Incomplete URL = https://github.com/Xinzhu-Fang/popout_exp0
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1536, 864]
  expName = popout_cindy
  exportHTML = manually
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Routines
  Routine instr
    CodeComponent code
      Code Type = Both
      Begin Experiment:
        Cindy_num_blocks_finished = 0

        MyExps = data.TrialHandler(nReps=1, method='random',
                                   extraInfo=expInfo, originPath=-1,
                                   trialList=data.importConditions('tExp.csv'),
                                   seed=None, name='MyExps')
        thisExp.addLoop(MyExps)  # add the loop to the experiment
        thisMyExp = MyExps.trialList[0]  # so we can initialise stimuli with some values
        # abbreviate parameter names if possible (e.g. rgb = thisMyExp.rgb)
        if thisMyExp != None:
          for paramName in thisMyExp:
            exec('{} = thisMyExp[paramName]'.format(paramName))
      Begin JS Experiment:
        Cindy_num_blocks_finished = 0
    TextComponent tInstr
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $tInstr_text
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    KeyboardComponent kInstr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    TextComponent tEnd
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $tEnd_text
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    KeyboardComponent kEnd
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pause
    CodeComponent code_4
      Code Type = Both
      Begin JS Routine:
        Cindy_num_blocks_finished += 1
        tPausse_text_final = tPause_text.concat('\n Number of blocks completed: ', Cindy_num_blocks_finished,  '\n Number of blocks remaining:  ' + parseInt(my_num_of_blocks - Cindy_num_blocks_finished))
      Begin Routine:
        Cindy_num_blocks_finished += 1
        tPausse_text_final = tPause_text +'\n Number of blocks completed: ' + str(Cindy_num_blocks_finished) + '\n Number of blocks remaining:  ' + str(int(my_num_of_blocks - Cindy_num_blocks_finished))
    TextComponent tPause
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $tPausse_text_final
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    KeyboardComponent kPause
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_2
    SoundComponent sTrial_2
      sound [set every repeat] = $file_name
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $sTrial_duration
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    KeyboardComponent kTrial_2
      correctAns = $correct_response
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = $kTrial_duration
      storeCorrect = True
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  Routine feedback_2
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        # Cindy break the block called trials
        if kTrial_2.keys == kTrial_break:
            trials_2.finished = 1

        # ------Cindy sets feedback messages -------
        # if not kTrial.keys :
        #     tFeedback_text=tFeedback_noresp
        if kTrial_2.corr:#stored on last run routine
            tFeedback_text=tFeedback_coresp
        else:
            tFeedback_text=tFeedback_wrresp
    TextComponent tFeedback_2
      letterHeight [set every repeat] = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $tFeedback_duration
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      text [set every repeat]:
        $tFeedback_text
    TextComponent tBlank_2
      letterHeight = 0.05
      startVal [time (s)] = $tFeedback_duration
      stopVal [duration (s)] = $tBlank_duration
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  Routine instr_2
    TextComponent tInstr_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        $tInstr_2_text
    KeyboardComponent kInstr_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
    KeyboardComponent kTrial
      allowedKeys [set every repeat] = kTrial_allowed_keys
      correctAns = $correct_response
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = $kTrial_duration
      storeCorrect = True
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    ImageComponent iTrial
      image [set every repeat] = $linux_file_name
      size [set every repeat] = (iTrial_size, iTrial_size)
      startVal [time (s)] = pTrial_duration
      stopVal [duration (s)] = $iTrial_duration + pTrial_duration
      units = height
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    TextComponent tTrial
      letterHeight = 0.1
      startVal [time (s)] = pTrial_duration
      stopVal [duration (s)] = pTrial_duration + tTrial_duration
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    ImageComponent pTrial
      image = fixation.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pTrial_duration
      units = height
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  Routine feedback
    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        # Cindy break the block called trials
        if kTrial.keys == kTrial_break:
            trials.finished = 1

        # ------Cindy sets feedback messages -------
        # if not kTrial.keys :
        #     tFeedback_text=tFeedback_noresp
        if kTrial.corr:#stored on last run routine
            tFeedback_text=tFeedback_coresp
        else:
            tFeedback_text=tFeedback_wrresp
    TextComponent tFeedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $tFeedback_duration
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      text [set every repeat]:
        $tFeedback_text
    TextComponent tBlank
      letterHeight = 0.05
      startVal [time (s)] = $tFeedback_duration
      stopVal [duration (s)] = $tBlank_duration
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Flow
  Routine instr
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = tAll_blocks.csv
    loopType = random
    nReps = blocks_nReps
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    conditions:
      [OrderedDict([('cur_block_file_name', 'tBlock01.csv')]),
      OrderedDict([('cur_block_file_name', 'tBlock02.csv')]),
      OrderedDict([('cur_block_file_name', 'tBlock03.csv')]),
      OrderedDict([('cur_block_file_name', 'tBlock04.csv')]),
      OrderedDict([('cur_block_file_name', 'tBlock05.csv')]),
      OrderedDict([('cur_block_file_name', 'tBlock06.csv')]),
      OrderedDict([('cur_block_file_name', 'tBlock07.csv')]),
      OrderedDict([('cur_block_file_name', 'tBlock08.csv')]),
      OrderedDict([('cur_block_file_name', 'tBlock09.csv')]),
      OrderedDict([('cur_block_file_name', 'tBlock10.csv')]),
      OrderedDict([('cur_block_file_name', 'tBlock11.csv')])]
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $cur_block_file_name
      loopType = random
      nReps = trials_nReps
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      Routine trial
    LoopTerminator trials
    Routine pause
  LoopTerminator blocks
  Routine end
